graphs:

  - id: DynamicIO

    nodes:
    - id: node_1
      module: timeflux_example.nodes.dynamic
      class: Outputs
      params:
        seed: 1
        prefix: foo
    - id: node_2
      module: timeflux_example.nodes.dynamic
      class: Inputs
      params:
        prefix: bar
    - id: node_3
      module: timeflux.nodes.debug
      class: Display
    - id: node_4
      module: timeflux.nodes.debug
      class: Display

    edges:
    - source: node_1:foo_* # Dynamic inputs can be prefixed
      target: node_2:bar   # The same goes for outputs
    - source: node_1
      target: node_3
    - source: node_2
      target: node_4